CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):90,512
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:4
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
OverlayOutlines:[module_num:6|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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigOverlay
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:IdentifyPrimaryObjects

SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:EXP1
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|D:\\Important\\IISER\\Coursework\\Minor Project\\THIS ONE\\Coloc image merging\\objects
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
